PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = inputText
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Routines
  Routine trial
    TextComponent instr
      letterHeight = 0.05
      pos = (-.2, 0.2)
      startVal [time (s)] = 0.0
      text = Type your guess below and press “enter” 
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    TextComponent feedback
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import random
        continueGame = 1
        answer = random.randint(1, 100)
      Begin JS Routine:
        modify = false;
        text.text = '';
      Begin Routine:
        modify = False
        text.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text.text = text.text + ' '
            elif 'backspace' in keys:
                text.text = text.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                if(int(text.text) == answer):
                    continueRoutine = False
                else:
                    continueGame += 1
                    if(int(text.text) > answer):
                        feedback.text = "Too high!"
                    else:
                        feedback.text = "Too low!"
                    text.text = ""
            else:
                if modify:
                    text.text = text.text + keys[0].upper()
                    modify = False
                else:
                    text.text = text.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text.text = text.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text.text = text.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text.text = text.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text.text)
        text.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
  Routine instructions
    TextComponent instText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this game you will be asked to guess a random number from 1 to 100, inclusive.

        Each time you guess, you will receive a hint. That hint will either tell you that your guess was too high or too low. You can use that feedback in your next turn.


        Press any key to continue...
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_pt2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Type in your guess and press “enter” in order to submit that guess.

        You will have 3 seconds from your last hint to enter your next guess or the game will timeout and you automatically lose.

        Press any key to continue…
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine game_over
    TextComponent game_over_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Congrats! You win!
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Flow
  Routine instructions
  Routine instruction_pt2
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = continueGame
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    Routine trial
  LoopTerminator trials
  Routine game_over
